---
API: 2
OpenSesame: 3.0.7b1
Platform: posix
---
set width 1680
set uniform_coordinates yes
set title "Comparing physical sizes of numbers"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1050
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/mathcog/Desktop/physNumComparisonTask/procedure"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sketchpad break1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have completed block 1 of 4.<br /><br />You may take a short break.<br /><br />Press any key when you are ready to resume the experiment." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-352 y=-192 z_index=0

define sketchpad break2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have completed block 2 of 4.<br /><br />You may take a short break.<br /><br />Press any key when you are ready to resume the experiment." x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-352 y=-192 z_index=0

define sketchpad break3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have completed block 3 of 4.<br /><br />You may take a short break.<br /><br />Press any key when you are ready to resume the experiment." x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-352 y=-192 z_index=0

define sketchpad break4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You have completed block 4 of 4.<br /><br />You are now finished with the experiment.<br /><br />Thank you for your participation!" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-352 y=-192 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction1 always
	run instruction2 always
	run experimentalBlock1 always
	run break1 always
	run experimentalBlock2 always
	run break2 always
	run experimentalBlock3 always
	run break3 always
	run experimentalBlock4 always
	run break4 always

define loop experimentalBlock1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item experimentalSequence1
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "distance;rightStimulus;leftStimulus;leftFont;correct_response;congruity;rightFont"
	set break_if_on_first yes
	set break_if never
	setcycle 0 distance "1"
	setcycle 0 rightStimulus "2"
	setcycle 0 leftStimulus "3"
	setcycle 0 leftFont "36.0"
	setcycle 0 correct_response "a"
	setcycle 0 congruity "congruent"
	setcycle 0 rightFont "28"
	setcycle 1 distance "1"
	setcycle 1 rightStimulus "3"
	setcycle 1 leftStimulus "4"
	setcycle 1 leftFont "36.0"
	setcycle 1 correct_response "a"
	setcycle 1 congruity "congruent"
	setcycle 1 rightFont "28"
	setcycle 2 distance "1"
	setcycle 2 rightStimulus "4"
	setcycle 2 leftStimulus "5"
	setcycle 2 leftFont "36.0"
	setcycle 2 correct_response "a"
	setcycle 2 congruity "congruent"
	setcycle 2 rightFont "28"
	setcycle 3 distance "2"
	setcycle 3 rightStimulus "2"
	setcycle 3 leftStimulus "4"
	setcycle 3 leftFont "36.0"
	setcycle 3 correct_response "a"
	setcycle 3 congruity "congruent"
	setcycle 3 rightFont "28"
	setcycle 4 distance "2"
	setcycle 4 rightStimulus "3"
	setcycle 4 leftStimulus "5"
	setcycle 4 leftFont "36.0"
	setcycle 4 correct_response "a"
	setcycle 4 congruity "congruent"
	setcycle 4 rightFont "28"
	setcycle 5 distance "2"
	setcycle 5 rightStimulus "4"
	setcycle 5 leftStimulus "6"
	setcycle 5 leftFont "36.0"
	setcycle 5 correct_response "a"
	setcycle 5 congruity "congruent"
	setcycle 5 rightFont "28"
	setcycle 6 distance "3"
	setcycle 6 rightStimulus "2"
	setcycle 6 leftStimulus "5"
	setcycle 6 leftFont "36.0"
	setcycle 6 correct_response "a"
	setcycle 6 congruity "congruent"
	setcycle 6 rightFont "28"
	setcycle 7 distance "3"
	setcycle 7 rightStimulus "3"
	setcycle 7 leftStimulus "6"
	setcycle 7 leftFont "36.0"
	setcycle 7 correct_response "a"
	setcycle 7 congruity "congruent"
	setcycle 7 rightFont "28"
	setcycle 8 distance "3"
	setcycle 8 rightStimulus "4"
	setcycle 8 leftStimulus "7"
	setcycle 8 leftFont "36.0"
	setcycle 8 correct_response "a"
	setcycle 8 congruity "congruent"
	setcycle 8 rightFont "28"
	setcycle 9 distance "4"
	setcycle 9 rightStimulus "2"
	setcycle 9 leftStimulus "6"
	setcycle 9 leftFont "36.0"
	setcycle 9 correct_response "a"
	setcycle 9 congruity "congruent"
	setcycle 9 rightFont "28"
	setcycle 10 distance "4"
	setcycle 10 rightStimulus "3"
	setcycle 10 leftStimulus "7"
	setcycle 10 leftFont "36.0"
	setcycle 10 correct_response "a"
	setcycle 10 congruity "congruent"
	setcycle 10 rightFont "28"
	setcycle 11 distance "4"
	setcycle 11 rightStimulus "4"
	setcycle 11 leftStimulus "8"
	setcycle 11 leftFont "36.0"
	setcycle 11 correct_response "a"
	setcycle 11 congruity "congruent"
	setcycle 11 rightFont "28"
	setcycle 12 distance "1"
	setcycle 12 rightStimulus "3"
	setcycle 12 leftStimulus "2"
	setcycle 12 leftFont "36.0"
	setcycle 12 correct_response "a"
	setcycle 12 congruity "incongruent"
	setcycle 12 rightFont "28"
	setcycle 13 distance "1"
	setcycle 13 rightStimulus "4"
	setcycle 13 leftStimulus "3"
	setcycle 13 leftFont "36.0"
	setcycle 13 correct_response "a"
	setcycle 13 congruity "incongruent"
	setcycle 13 rightFont "28"
	setcycle 14 distance "1"
	setcycle 14 rightStimulus "5"
	setcycle 14 leftStimulus "4"
	setcycle 14 leftFont "36.0"
	setcycle 14 correct_response "a"
	setcycle 14 congruity "incongruent"
	setcycle 14 rightFont "28"
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	setcycle 17 distance "2"
	setcycle 17 rightStimulus "6"
	setcycle 17 leftStimulus "4"
	setcycle 17 leftFont "36.0"
	setcycle 17 correct_response "a"
	setcycle 17 congruity "incongruent"
	setcycle 17 rightFont "28"
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	setcycle 20 distance "3"
	setcycle 20 rightStimulus "7"
	setcycle 20 leftStimulus "4"
	setcycle 20 leftFont "36.0"
	setcycle 20 correct_response "a"
	setcycle 20 congruity "incongruent"
	setcycle 20 rightFont "28"
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	setcycle 23 distance "4"
	setcycle 23 rightStimulus "8"
	setcycle 23 leftStimulus "4"
	setcycle 23 leftFont "36.0"
	setcycle 23 correct_response "a"
	setcycle 23 congruity "incongruent"
	setcycle 23 rightFont "28"
	setcycle 24 distance "1"
	setcycle 24 rightStimulus "2"
	setcycle 24 leftStimulus "3"
	setcycle 24 leftFont "28.0"
	setcycle 24 correct_response "l"
	setcycle 24 congruity "incongruent"
	setcycle 24 rightFont "36"
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	setcycle 32 distance "3"
	setcycle 32 rightStimulus "4"
	setcycle 32 leftStimulus "7"
	setcycle 32 leftFont "28"
	setcycle 32 correct_response "l"
	setcycle 32 congruity "incongruent"
	setcycle 32 rightFont "36"
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	setcycle 36 distance "1"
	setcycle 36 rightStimulus "3"
	setcycle 36 leftStimulus "2"
	setcycle 36 leftFont "28"
	setcycle 36 correct_response "l"
	setcycle 36 congruity "congruent"
	setcycle 36 rightFont "36"
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	setcycle 48 distance "1"
	setcycle 48 rightStimulus "2"
	setcycle 48 leftStimulus "3"
	setcycle 48 leftFont "36"
	setcycle 48 correct_response "a"
	setcycle 48 congruity "congruent"
	setcycle 48 rightFont "28"
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	run experimentalSequence1

define loop experimentalBlock2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item experimentalSequence2
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "distance;rightStimulus;leftStimulus;leftFont;correct_response;congruity;rightFont"
	set break_if_on_first yes
	set break_if never
	setcycle 0 distance "1"
	setcycle 0 rightStimulus "2"
	setcycle 0 leftStimulus "3"
	setcycle 0 leftFont "36"
	setcycle 0 correct_response "a"
	setcycle 0 congruity "congruent"
	setcycle 0 rightFont "28"
	setcycle 1 distance "1"
	setcycle 1 rightStimulus "3"
	setcycle 1 leftStimulus "4"
	setcycle 1 leftFont "36"
	setcycle 1 correct_response "a"
	setcycle 1 congruity "congruent"
	setcycle 1 rightFont "28"
	setcycle 2 distance "1"
	setcycle 2 rightStimulus "4"
	setcycle 2 leftStimulus "5"
	setcycle 2 leftFont "36"
	setcycle 2 correct_response "a"
	setcycle 2 congruity "congruent"
	setcycle 2 rightFont "28"
	setcycle 3 distance "2"
	setcycle 3 rightStimulus "2"
	setcycle 3 leftStimulus "4"
	setcycle 3 leftFont "36"
	setcycle 3 correct_response "a"
	setcycle 3 congruity "congruent"
	setcycle 3 rightFont "28"
	setcycle 4 distance "2"
	setcycle 4 rightStimulus "3"
	setcycle 4 leftStimulus "5"
	setcycle 4 leftFont "36"
	setcycle 4 correct_response "a"
	setcycle 4 congruity "congruent"
	setcycle 4 rightFont "28"
	setcycle 5 distance "2"
	setcycle 5 rightStimulus "4"
	setcycle 5 leftStimulus "6"
	setcycle 5 leftFont "36"
	setcycle 5 correct_response "a"
	setcycle 5 congruity "congruent"
	setcycle 5 rightFont "28"
	setcycle 6 distance "3"
	setcycle 6 rightStimulus "2"
	setcycle 6 leftStimulus "5"
	setcycle 6 leftFont "36"
	setcycle 6 correct_response "a"
	setcycle 6 congruity "congruent"
	setcycle 6 rightFont "28"
	setcycle 7 distance "3"
	setcycle 7 rightStimulus "3"
	setcycle 7 leftStimulus "6"
	setcycle 7 leftFont "36"
	setcycle 7 correct_response "a"
	setcycle 7 congruity "congruent"
	setcycle 7 rightFont "28"
	setcycle 8 distance "3"
	setcycle 8 rightStimulus "4"
	setcycle 8 leftStimulus "7"
	setcycle 8 leftFont "36"
	setcycle 8 correct_response "a"
	setcycle 8 congruity "congruent"
	setcycle 8 rightFont "28"
	setcycle 9 distance "4"
	setcycle 9 rightStimulus "2"
	setcycle 9 leftStimulus "6"
	setcycle 9 leftFont "36"
	setcycle 9 correct_response "a"
	setcycle 9 congruity "congruent"
	setcycle 9 rightFont "28"
	setcycle 10 distance "4"
	setcycle 10 rightStimulus "3"
	setcycle 10 leftStimulus "7"
	setcycle 10 leftFont "36"
	setcycle 10 correct_response "a"
	setcycle 10 congruity "congruent"
	setcycle 10 rightFont "28"
	setcycle 11 distance "4"
	setcycle 11 rightStimulus "4"
	setcycle 11 leftStimulus "8"
	setcycle 11 leftFont "36"
	setcycle 11 correct_response "a"
	setcycle 11 congruity "congruent"
	setcycle 11 rightFont "28"
	setcycle 12 distance "1"
	setcycle 12 rightStimulus "3"
	setcycle 12 leftStimulus "2"
	setcycle 12 leftFont "36"
	setcycle 12 correct_response "a"
	setcycle 12 congruity "incongruent"
	setcycle 12 rightFont "28"
	setcycle 13 distance "1"
	setcycle 13 rightStimulus "4"
	setcycle 13 leftStimulus "3"
	setcycle 13 leftFont "36"
	setcycle 13 correct_response "a"
	setcycle 13 congruity "incongruent"
	setcycle 13 rightFont "28"
	setcycle 14 distance "1"
	setcycle 14 rightStimulus "5"
	setcycle 14 leftStimulus "4"
	setcycle 14 leftFont "36"
	setcycle 14 correct_response "a"
	setcycle 14 congruity "incongruent"
	setcycle 14 rightFont "28"
	setcycle 15 distance "2"
	setcycle 15 rightStimulus "4"
	setcycle 15 leftStimulus "2"
	setcycle 15 leftFont "36"
	setcycle 15 correct_response "a"
	setcycle 15 congruity "incongruent"
	setcycle 15 rightFont "28"
	setcycle 16 distance "2"
	setcycle 16 rightStimulus "5"
	setcycle 16 leftStimulus "3"
	setcycle 16 leftFont "36"
	setcycle 16 correct_response "a"
	setcycle 16 congruity "incongruent"
	setcycle 16 rightFont "28"
	setcycle 17 distance "2"
	setcycle 17 rightStimulus "6"
	setcycle 17 leftStimulus "4"
	setcycle 17 leftFont "36"
	setcycle 17 correct_response "a"
	setcycle 17 congruity "incongruent"
	setcycle 17 rightFont "28"
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	setcycle 20 distance "3"
	setcycle 20 rightStimulus "7"
	setcycle 20 leftStimulus "4"
	setcycle 20 leftFont "36"
	setcycle 20 correct_response "a"
	setcycle 20 congruity "incongruent"
	setcycle 20 rightFont "28"
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	setcycle 23 distance "4"
	setcycle 23 rightStimulus "8"
	setcycle 23 leftStimulus "4"
	setcycle 23 leftFont "36"
	setcycle 23 correct_response "a"
	setcycle 23 congruity "incongruent"
	setcycle 23 rightFont "28"
	setcycle 24 distance "1"
	setcycle 24 rightStimulus "2"
	setcycle 24 leftStimulus "3"
	setcycle 24 leftFont "28"
	setcycle 24 correct_response "l"
	setcycle 24 congruity "incongruent"
	setcycle 24 rightFont "36"
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	setcycle 36 distance "1"
	setcycle 36 rightStimulus "3"
	setcycle 36 leftStimulus "2"
	setcycle 36 leftFont "28"
	setcycle 36 correct_response "l"
	setcycle 36 congruity "congruent"
	setcycle 36 rightFont "36"
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	run experimentalSequence2

define loop experimentalBlock3
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item experimentalSequence3
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "distance;rightStimulus;leftStimulus;leftFont;correct_response;congruity;rightFont"
	set break_if_on_first yes
	set break_if never
	setcycle 0 distance "1"
	setcycle 0 rightStimulus "2"
	setcycle 0 leftStimulus "3"
	setcycle 0 leftFont "36"
	setcycle 0 correct_response "a"
	setcycle 0 congruity "congruent"
	setcycle 0 rightFont "28"
	setcycle 1 distance "1"
	setcycle 1 rightStimulus "3"
	setcycle 1 leftStimulus "4"
	setcycle 1 leftFont "36"
	setcycle 1 correct_response "a"
	setcycle 1 congruity "congruent"
	setcycle 1 rightFont "28"
	setcycle 2 distance "1"
	setcycle 2 rightStimulus "4"
	setcycle 2 leftStimulus "5"
	setcycle 2 leftFont "36"
	setcycle 2 correct_response "a"
	setcycle 2 congruity "congruent"
	setcycle 2 rightFont "28"
	setcycle 3 distance "2"
	setcycle 3 rightStimulus "2"
	setcycle 3 leftStimulus "4"
	setcycle 3 leftFont "36"
	setcycle 3 correct_response "a"
	setcycle 3 congruity "congruent"
	setcycle 3 rightFont "28"
	setcycle 4 distance "2"
	setcycle 4 rightStimulus "3"
	setcycle 4 leftStimulus "5"
	setcycle 4 leftFont "36"
	setcycle 4 correct_response "a"
	setcycle 4 congruity "congruent"
	setcycle 4 rightFont "28"
	setcycle 5 distance "2"
	setcycle 5 rightStimulus "4"
	setcycle 5 leftStimulus "6"
	setcycle 5 leftFont "36"
	setcycle 5 correct_response "a"
	setcycle 5 congruity "congruent"
	setcycle 5 rightFont "28"
	setcycle 6 distance "3"
	setcycle 6 rightStimulus "2"
	setcycle 6 leftStimulus "5"
	setcycle 6 leftFont "36"
	setcycle 6 correct_response "a"
	setcycle 6 congruity "congruent"
	setcycle 6 rightFont "28"
	setcycle 7 distance "3"
	setcycle 7 rightStimulus "3"
	setcycle 7 leftStimulus "6"
	setcycle 7 leftFont "36"
	setcycle 7 correct_response "a"
	setcycle 7 congruity "congruent"
	setcycle 7 rightFont "28"
	setcycle 8 distance "3"
	setcycle 8 rightStimulus "4"
	setcycle 8 leftStimulus "7"
	setcycle 8 leftFont "36"
	setcycle 8 correct_response "a"
	setcycle 8 congruity "congruent"
	setcycle 8 rightFont "28"
	setcycle 9 distance "4"
	setcycle 9 rightStimulus "2"
	setcycle 9 leftStimulus "6"
	setcycle 9 leftFont "36"
	setcycle 9 correct_response "a"
	setcycle 9 congruity "congruent"
	setcycle 9 rightFont "28"
	setcycle 10 distance "4"
	setcycle 10 rightStimulus "3"
	setcycle 10 leftStimulus "7"
	setcycle 10 leftFont "36"
	setcycle 10 correct_response "a"
	setcycle 10 congruity "congruent"
	setcycle 10 rightFont "28"
	setcycle 11 distance "4"
	setcycle 11 rightStimulus "4"
	setcycle 11 leftStimulus "8"
	setcycle 11 leftFont "36"
	setcycle 11 correct_response "a"
	setcycle 11 congruity "congruent"
	setcycle 11 rightFont "28"
	setcycle 12 distance "1"
	setcycle 12 rightStimulus "3"
	setcycle 12 leftStimulus "2"
	setcycle 12 leftFont "36"
	setcycle 12 correct_response "a"
	setcycle 12 congruity "incongruent"
	setcycle 12 rightFont "28"
	setcycle 13 distance "1"
	setcycle 13 rightStimulus "4"
	setcycle 13 leftStimulus "3"
	setcycle 13 leftFont "36"
	setcycle 13 correct_response "a"
	setcycle 13 congruity "incongruent"
	setcycle 13 rightFont "28"
	setcycle 14 distance "1"
	setcycle 14 rightStimulus "5"
	setcycle 14 leftStimulus "4"
	setcycle 14 leftFont "36"
	setcycle 14 correct_response "a"
	setcycle 14 congruity "incongruent"
	setcycle 14 rightFont "28"
	setcycle 15 distance "2"
	setcycle 15 rightStimulus "4"
	setcycle 15 leftStimulus "2"
	setcycle 15 leftFont "36"
	setcycle 15 correct_response "a"
	setcycle 15 congruity "incongruent"
	setcycle 15 rightFont "28"
	setcycle 16 distance "2"
	setcycle 16 rightStimulus "5"
	setcycle 16 leftStimulus "3"
	setcycle 16 leftFont "36"
	setcycle 16 correct_response "a"
	setcycle 16 congruity "incongruent"
	setcycle 16 rightFont "28"
	setcycle 17 distance "2"
	setcycle 17 rightStimulus "6"
	setcycle 17 leftStimulus "4"
	setcycle 17 leftFont "36"
	setcycle 17 correct_response "a"
	setcycle 17 congruity "incongruent"
	setcycle 17 rightFont "28"
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	setcycle 20 distance "3"
	setcycle 20 rightStimulus "7"
	setcycle 20 leftStimulus "4"
	setcycle 20 leftFont "36"
	setcycle 20 correct_response "a"
	setcycle 20 congruity "incongruent"
	setcycle 20 rightFont "28"
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	setcycle 23 distance "4"
	setcycle 23 rightStimulus "8"
	setcycle 23 leftStimulus "4"
	setcycle 23 leftFont "36"
	setcycle 23 correct_response "a"
	setcycle 23 congruity "incongruent"
	setcycle 23 rightFont "28"
	setcycle 24 distance "1"
	setcycle 24 rightStimulus "2"
	setcycle 24 leftStimulus "3"
	setcycle 24 leftFont "28"
	setcycle 24 correct_response "l"
	setcycle 24 congruity "incongruent"
	setcycle 24 rightFont "36"
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	setcycle 36 distance "1"
	setcycle 36 rightStimulus "3"
	setcycle 36 leftStimulus "2"
	setcycle 36 leftFont "28"
	setcycle 36 correct_response "l"
	setcycle 36 congruity "congruent"
	setcycle 36 rightFont "36"
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	run experimentalSequence3

define loop experimentalBlock4
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item experimentalSequence4
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "distance;rightStimulus;leftStimulus;leftFont;correct_response;congruity;rightFont"
	set break_if_on_first yes
	set break_if never
	setcycle 0 distance "1"
	setcycle 0 rightStimulus "2"
	setcycle 0 leftStimulus "3"
	setcycle 0 leftFont "36"
	setcycle 0 correct_response "a"
	setcycle 0 congruity "congruent"
	setcycle 0 rightFont "28"
	setcycle 1 distance "1"
	setcycle 1 rightStimulus "3"
	setcycle 1 leftStimulus "4"
	setcycle 1 leftFont "36"
	setcycle 1 correct_response "a"
	setcycle 1 congruity "congruent"
	setcycle 1 rightFont "28"
	setcycle 2 distance "1"
	setcycle 2 rightStimulus "4"
	setcycle 2 leftStimulus "5"
	setcycle 2 leftFont "36"
	setcycle 2 correct_response "a"
	setcycle 2 congruity "congruent"
	setcycle 2 rightFont "28"
	setcycle 3 distance "2"
	setcycle 3 rightStimulus "2"
	setcycle 3 leftStimulus "4"
	setcycle 3 leftFont "36"
	setcycle 3 correct_response "a"
	setcycle 3 congruity "congruent"
	setcycle 3 rightFont "28"
	setcycle 4 distance "2"
	setcycle 4 rightStimulus "3"
	setcycle 4 leftStimulus "5"
	setcycle 4 leftFont "36"
	setcycle 4 correct_response "a"
	setcycle 4 congruity "congruent"
	setcycle 4 rightFont "28"
	setcycle 5 distance "2"
	setcycle 5 rightStimulus "4"
	setcycle 5 leftStimulus "6"
	setcycle 5 leftFont "36"
	setcycle 5 correct_response "a"
	setcycle 5 congruity "congruent"
	setcycle 5 rightFont "28"
	setcycle 6 distance "3"
	setcycle 6 rightStimulus "2"
	setcycle 6 leftStimulus "5"
	setcycle 6 leftFont "36"
	setcycle 6 correct_response "a"
	setcycle 6 congruity "congruent"
	setcycle 6 rightFont "28"
	setcycle 7 distance "3"
	setcycle 7 rightStimulus "3"
	setcycle 7 leftStimulus "6"
	setcycle 7 leftFont "36"
	setcycle 7 correct_response "a"
	setcycle 7 congruity "congruent"
	setcycle 7 rightFont "28"
	setcycle 8 distance "3"
	setcycle 8 rightStimulus "4"
	setcycle 8 leftStimulus "7"
	setcycle 8 leftFont "36"
	setcycle 8 correct_response "a"
	setcycle 8 congruity "congruent"
	setcycle 8 rightFont "28"
	setcycle 9 distance "4"
	setcycle 9 rightStimulus "2"
	setcycle 9 leftStimulus "6"
	setcycle 9 leftFont "36"
	setcycle 9 correct_response "a"
	setcycle 9 congruity "congruent"
	setcycle 9 rightFont "28"
	setcycle 10 distance "4"
	setcycle 10 rightStimulus "3"
	setcycle 10 leftStimulus "7"
	setcycle 10 leftFont "36"
	setcycle 10 correct_response "a"
	setcycle 10 congruity "congruent"
	setcycle 10 rightFont "28"
	setcycle 11 distance "4"
	setcycle 11 rightStimulus "4"
	setcycle 11 leftStimulus "8"
	setcycle 11 leftFont "36"
	setcycle 11 correct_response "a"
	setcycle 11 congruity "congruent"
	setcycle 11 rightFont "28"
	setcycle 12 distance "1"
	setcycle 12 rightStimulus "3"
	setcycle 12 leftStimulus "2"
	setcycle 12 leftFont "36"
	setcycle 12 correct_response "a"
	setcycle 12 congruity "incongruent"
	setcycle 12 rightFont "28"
	setcycle 13 distance "1"
	setcycle 13 rightStimulus "4"
	setcycle 13 leftStimulus "3"
	setcycle 13 leftFont "36"
	setcycle 13 correct_response "a"
	setcycle 13 congruity "incongruent"
	setcycle 13 rightFont "28"
	setcycle 14 distance "1"
	setcycle 14 rightStimulus "5"
	setcycle 14 leftStimulus "4"
	setcycle 14 leftFont "36"
	setcycle 14 correct_response "a"
	setcycle 14 congruity "incongruent"
	setcycle 14 rightFont "28"
	setcycle 15 distance "2"
	setcycle 15 rightStimulus "4"
	setcycle 15 leftStimulus "2"
	setcycle 15 leftFont "36"
	setcycle 15 correct_response "a"
	setcycle 15 congruity "incongruent"
	setcycle 15 rightFont "28"
	setcycle 16 distance "2"
	setcycle 16 rightStimulus "5"
	setcycle 16 leftStimulus "3"
	setcycle 16 leftFont "36"
	setcycle 16 correct_response "a"
	setcycle 16 congruity "incongruent"
	setcycle 16 rightFont "28"
	setcycle 17 distance "2"
	setcycle 17 rightStimulus "6"
	setcycle 17 leftStimulus "4"
	setcycle 17 leftFont "36"
	setcycle 17 correct_response "a"
	setcycle 17 congruity "incongruent"
	setcycle 17 rightFont "28"
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	setcycle 20 distance "3"
	setcycle 20 rightStimulus "7"
	setcycle 20 leftStimulus "4"
	setcycle 20 leftFont "36"
	setcycle 20 correct_response "a"
	setcycle 20 congruity "incongruent"
	setcycle 20 rightFont "28"
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	setcycle 23 distance "4"
	setcycle 23 rightStimulus "8"
	setcycle 23 leftStimulus "4"
	setcycle 23 leftFont "36"
	setcycle 23 correct_response "a"
	setcycle 23 congruity "incongruent"
	setcycle 23 rightFont "28"
	setcycle 24 distance "1"
	setcycle 24 rightStimulus "2"
	setcycle 24 leftStimulus "3"
	setcycle 24 leftFont "28"
	setcycle 24 correct_response "l"
	setcycle 24 congruity "incongruent"
	setcycle 24 rightFont "36"
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	setcycle 36 distance "1"
	setcycle 36 rightStimulus "3"
	setcycle 36 leftStimulus "2"
	setcycle 36 leftFont "28"
	setcycle 36 correct_response "l"
	setcycle 36 congruity "congruent"
	setcycle 36 rightFont "36"
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	run experimentalSequence4

define sequence experimentalSequence1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation1 always
	run numbers1 always
	run keyboard_response1 always
	run incorrectFeedback1 "[correct]=0"
	run logger1 always

define sequence experimentalSequence2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation2 always
	run numbers2 always
	run keyboard_response2 always
	run incorrectFeedback2 "[correct]=0"
	run logger2 always

define sequence experimentalSequence3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation3 always
	run numbers3 always
	run keyboard_response3 always
	run incorrectFeedback3 "[correct]=0"
	run logger3 always

define sequence experimentalSequence4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation4 always
	run numbers4 always
	run keyboard_response4 always
	run incorrectFeedback4 "[correct]=0"
	run logger4 always

define sketchpad fixation1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad fixation2
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad fixation3
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad fixation4
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad incorrectFeedback1
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=72 html=yes show_if=always text=X x=0 y=0 z_index=0

define sketchpad incorrectFeedback2
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=72 html=yes show_if=always text=X x=0 y=0 z_index=0

define sketchpad incorrectFeedback3
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=72 html=yes show_if=always text=X x=0 y=0 z_index=0

define sketchpad incorrectFeedback4
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=72 html=yes show_if=always text=X x=0 y=0 z_index=0

define sketchpad instruction1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="In this experiment, you will see pairs of numbers <br />presented on the screen.<br /><br />The two numbers will be displayed in slightly different<br />sizes on the screen.<br />Your task is to quickly judge which of the <br />two numbers is PHYSICALLY larger (i.e., the larger font)<br /><br />If the number on the left is larger, press the A key.<br /><br />If the number on the right is larger, press the L key.<br /><br />Please be quick, but accurate.<br /><br />(press any key to continue)<br />" x=0 y=-64 z_index=0

define sketchpad instruction2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="You will complete 4 blocks of 96 trials each.  <br /><br />You can take a short break after each block.<br /><br />The entire session should last less than 30 minutes.<br /><br />When you are ready to begin, place your left index finger<br />on the A key and your right index finger on the L key.<br /><br />Press one of those keys to begin the trials." x=0 y=-64 z_index=0

define keyboard_response keyboard_response1
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define keyboard_response keyboard_response2
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define keyboard_response keyboard_response3
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define keyboard_response keyboard_response4
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;l"

define logger logger1
	set description "Logs experimental data"
	set auto_log no
	log congruity
	log correct
	log distance
	log leftStimulus
	log response
	log response_time
	log rightStimulus
	log subject_nr

define logger logger2
	set description "Logs experimental data"
	set auto_log no
	log congruity
	log correct
	log distance
	log leftStimulus
	log response
	log response_time
	log rightStimulus
	log subject_nr

define logger logger3
	set description "Logs experimental data"
	set auto_log no
	log congruity
	log correct
	log distance
	log leftStimulus
	log response
	log response_time
	log rightStimulus
	log subject_nr

define logger logger4
	set description "Logs experimental data"
	set auto_log no
	log congruity
	log correct
	log distance
	log leftStimulus
	log response
	log response_time
	log rightStimulus
	log subject_nr

define sketchpad numbers1
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[leftFont]" html=yes show_if=always text="[leftStimulus]" x=-300 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[rightFont]" html=yes show_if=always text="[rightStimulus]" x=300 y=0 z_index=0

define sketchpad numbers2
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[leftFont]" html=yes show_if=always text="[leftStimulus]" x=-300 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[rightFont]" html=yes show_if=always text="[rightStimulus]" x=300 y=0 z_index=0

define sketchpad numbers3
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[leftFont]" html=yes show_if=always text="[leftStimulus]" x=-300 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[rightFont]" html=yes show_if=always text="[rightStimulus]" x=300 y=0 z_index=0

define sketchpad numbers4
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[leftFont]" html=yes show_if=always text="[leftStimulus]" x=-300 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size="[rightFont]" html=yes show_if=always text="[rightStimulus]" x=300 y=0 z_index=0

